PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data' + os.path.sep + expInfo['date']
  Monitor = testMonitor
  color = $[-0.349,-0.592,-0.749]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {}
  expName = srt22
  Units = use prefs
  Screen = 1
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Routines
  Routine delay2sec
    TextComponent delay_text
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine save_rt2
    CodeComponent code_5
      Begin Routine:
        loop2_rt = loop2_rt + error_loop2.data['polygon_keyresp.rt'].mean()
        loop2_count = loop2_count + 1
  Routine feedback
    CodeComponent feedback_code
      Begin Experiment:
        feedback_color = [1, 1, 1]
      Begin Routine:
        if polygon_keyresp.corr:
            feedback_color = [1, 1, 1]
        else:
            feedback_color = [0, 1, 1]
    PolygonComponent feedback_polygon
      fillColor [set every repeat] = $feedback_color
      stopVal [duration (s)] = 0.3
      pos [set every repeat] = $position
      lineWidth = 2
      lineColor [set every repeat] = $feedback_color
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.42, 0.672]
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  Routine feedback_11
    TextComponent text_2
      wrapWidth = 1.95
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Примерно в 85% случаев появление крота в конкретной норке определялось заранее заданной последовательностью.
        В остальных 15% случаев крот оказывался в случайной норке.
        Заметили ли вы повторяющуюся последовательность норок?
        Даже если не заметили, вы могли неосознанно её усвоить и начать отвечать быстрее. Такой эффект неосознаваемого усвоение определённых закономерностей называется "имплицитное научение".
        Чтобы узнать, научились ли вы реагировать на последовательность, нужно сравнить среднее время реакции на появления крота в предопределённых и случайных норках.
        Нажмите ПРОБЕЛ, чтобы узнать, научились ли вы.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 5.0
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  Routine instruction
    TextComponent instruction_text
      wrapWidth = 1.9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        ИГРА "ПОЙМАЙ КРОТА!"

        На экране появится шесть норок. В каждой из них может появиться крот, которого и нужно поймать.
        Ловить крота нужно, нажимая соответствующую норке клавишу. Клавиши и норки расположены горизонтально слева-направо.
        Ваша задача - поймать всех кротов быстрее других участников!

        Приготовьтесь и нажмите ПРОБЕЛ, чтобы начать.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 3.0
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  Routine save_rt
    CodeComponent code_4
      Begin Experiment:
        loop1_count = 0
        loop2_count = 0
      Begin Routine:
        loop1_rt = loop1_rt + error_loop.data['polygon_keyresp.rt'].mean()
        loop1_count = loop1_count + 1
  Routine feedback_2
    CodeComponent code_3
      Begin Experiment:
        msg1 = "doh!"
        msg2 = "doh!"
      Begin Routine:
        msg1 = round(loop1_rt/loop1_count, 3)
        msg2 = round(loop2_rt/loop2_count, 3)
    TextComponent msg1_text
      text [set every repeat] = $msg1
      pos = [-0.4, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent msg2_text
      text [set every repeat] = $msg2
      pos = [0.4, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_determ
      wrapWidth = 0.5
      text = Среднее время реакции на предопределённые норки (cек.)
      pos = [-0.4, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_rand
      wrapWidth = 0.5
      text = Среднее время реакции на случайные норки (cек.)
      pos = [0.4, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 1.0
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  Routine trial
    PolygonComponent polygon_1
      fillColor = $[-0.929,0.051,-0.929]
      pos = [-0.8,0.2]
      lineWidth = 2
      lineColor = $[-0.929,0.051,-0.929]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.35, 0.560]
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    PolygonComponent polygon_2
      fillColor = $[-0.929,0.051,-0.929]
      pos = [-0.5,-0.2]
      lineWidth = 2
      lineColor = $[-0.929,0.051,-0.929]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.35, 0.560]
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    PolygonComponent polygon_3
      fillColor = $[-0.929,0.051,-0.929]
      pos = [-0.17,0.1]
      lineWidth = 2
      lineColor = $[-0.929,0.051,-0.929]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.35, 0.560]
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    PolygonComponent polygon_4
      fillColor = $[-0.929,0.051,-0.929]
      pos = [0.17,-0.1]
      lineWidth = 2
      lineColor = $[-0.929,0.051,-0.929]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.35, 0.560]
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    PolygonComponent polygon_5
      fillColor = $[-0.929,0.051,-0.929]
      pos = [0.5,0.2]
      lineWidth = 2
      lineColor = $[-0.929,0.051,-0.929]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.35, 0.560]
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    PolygonComponent polygon_6
      fillColor = $[-0.929,0.051,-0.929]
      pos = [0.8,-0.2]
      lineWidth = 2
      lineColor = $[-0.929,0.051,-0.929]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.35, 0.560]
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    PatchComponent image
      pos [set every repeat] = $position
      interpolate = nearest
      sf = None
      startVal [time (s)] = 0.0
      image = WhackAMoleR.gif
      size = [0.37, 0.660]
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    KeyboardComponent polygon_keyresp
      correctAns = $corrans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 's','d','f','j','k', 'l'
      startVal [time (s)] = 0.0
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    CodeComponent force_routine_code
      End Routine:
        loop_name.finished = polygon_keyresp.corr
  Routine feedback_1
    CodeComponent code_6
      Begin Experiment:
        msg3 = 'doh'
        overall_time = 0
      Begin Routine:
        overall_time = round(loop1_rt + loop2_rt, 3)
        msg3 = u"Все кроты пойманы за %s секунд" %(overall_time)
    TextComponent text
      text [set every repeat] = $msg3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_3
      wrapWidth = 1.8
      text = Нажмите Q, чтобы узнать ещё кое-что интересненькое.
      pos = [0, -0.4]
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'q'
      startVal [time (s)] = 4.0
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  Routine setx
    CodeComponent code
      Begin Experiment:
        loop1_rt = 0
        loop2_rt = 0
      Begin Routine:
        loop_name = error_loop
  Routine setx2
    CodeComponent code_2
      Begin Routine:
        loop_name = error_loop2
Flow
  Routine instruction
  Routine delay2sec
  LoopInitiator stage loopType="TrialHandler"
    loopType = random
    nReps = 8
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = srt2_trials.xlsx
      loopType = sequential
      nReps = 5
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      conditions:
        [{u'position': [-0.5, 0], u'corrans': u'd'},
        {u'position': [-0.83, 0], u'corrans': u's'},
        {u'position': [0.17, 0], u'corrans': u'j'},
        {u'position': [0.83, 0], u'corrans': u'l'},
        {u'position': [-0.17, 0], u'corrans': u'f'},
        {u'position': [0.5, 0], u'corrans': u'k'}]
      LoopInitiator error_loop loopType="TrialHandler"
        loopType = random
        nReps = 1000
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        Routine setx
        Routine trial
        Routine save_rt
      LoopTerminator error_loop
    LoopTerminator trials
    LoopInitiator trials2 loopType="TrialHandler"
      conditionsFile = srt2_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'position': [-0.5, -0.2], u'corrans': u'd'},
        {u'position': [-0.8, 0.2], u'corrans': u's'},
        {u'position': [0.17, -0.1], u'corrans': u'j'},
        {u'position': [0.8, -0.2], u'corrans': u'l'},
        {u'position': [-0.17, 0.1], u'corrans': u'f'},
        {u'position': [0.5, 0.2], u'corrans': u'k'}]
      LoopInitiator error_loop2 loopType="TrialHandler"
        loopType = random
        nReps = 1000
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        Routine setx2
        Routine trial
        Routine save_rt2
      LoopTerminator error_loop2
    LoopTerminator trials2
  LoopTerminator stage
  Routine feedback_1
  Routine feedback_11
  Routine feedback_2
